
/* 1) eyelink-driven (e.g. HV13)
   2) Manual eye calibration (adjustments in eyelink)
     ask subjects to pursue moving ball on the screen
      1) horizon left/right for vertical center
      2) horizon left/right for vertical upper
      3) vertical up/down for horizontal center
      4) vertical up/down for horizontal right
     (optional) 5) horizon left/right for vertical lower
     (optional) 6) vertical up/down for horizontal left
     (optional) 7) diagonal upRight / downLeft
     (optional) 8) diagonal upLeft / downRight
   3) use "Eye Calibrator"
   */


////////////////
// I/O Devices
////////////////

var subject = 'monkey' // 'monkey' // 'human'
%define monkey
// %define monkey

// %define laptop
// %define psychophysics
%define monkey_train
// %define monkey_ephys // labjack photodiode

// var platform = 'laptop' // mouse keyboard
// var platform = 'psychophysics' // human
var platform = 'monkey_train' // eyelink keyboard
// var platform = 'monkey_ephys'

%ifdef monkey_train
    %include 'hand_interfaces/keyboard'
    %include 'eye_interfaces/eyelink'
    %include 'reward_interfaces/firmata_train'
%end

// These directories are copied to the machine running MWServer
resource ('sounds')

sound/wav_file success_sound ('sounds/success.wav')
sound/wav_file failure_sound ('sounds/failure.wav')
sound/wav_file pong_sound ('sounds/pong.wav')

/////////////////
// Variables
/////////////////

    // var space_pressed = 0 (groups = I/O)

group Reward {
    var reward_line = 0 (groups = Reward)
    var rewardDur = 1000 (groups = Reward)
    var bonusRewDur = 0  (groups = Reward)
}
group Fixation {
    var fixY = 0 (groups = Fixation)
    var fixX = 0 (groups = Fixation)
    var fix_win = 10 (
        groups = Fixation
        persistant = 1
        )
    var fix_sz = 4 (groups = Fixation)
    var NoFixWaitDur = 500 (groups = Fixation)
    var fixWaitDur = 10000 (groups = Fixation)
    var fixOn = 0 (groups = Fixation)
    var fix_red = 1 (groups = Fixation)
    var fix_green = 1 (groups = Fixation)
    var fix_blue = 1 (groups = Fixation)
}


group Global {
    var pstop = 0 (groups = Trial)
    var startTrial = 0 (groups = Trial)
    var endTrial = 0 (groups = Trial)
    var localTrials = 0 (groups = Trial)
    var CorrectTrials = 0 (groups = Trial)
}
group 'Fixation+Pursuit' {
    var pursuitTheta = 0 (groups = Fixation)
    var nRep = 1 (groups = Fixation) // 3
    var trialNum = 1e6  (groups = Fixation)
    var on_fix_dyn = 0 (groups = Fixation)
    var fixHz = 0.25 (groups = Fixation)
    var fixDynMag = 8 (groups = Fixation)
    var tStart = 0 (groups = Fixation)
    var fix_pur_HoldDur = 500    (groups = Fixation)
    var fix_pur_ITI_Dur = 2000 (groups = Fixation)
    var fix_pur_timeoutDur = 500 (groups = Fixation)

    var early_HoldDur     = 100   (groups = Fixation)  // short hold for early reward
    var early_rewardDur   = 50   (groups = Fixation)  // small juice pulse
    var reward_multiplier = 3     (groups = Fixation)  // late reward = early × this
    var holdDur_step      = 50    (groups = Fixation)
    var holdDur_min       = 100   (groups = Fixation)
    var holdDur_max       = 2000  (groups = Fixation)
}

group Matlab {
    var sync = 0 (groups = Matlab)
    var Nback = 100 (
        groups = Matlab
        persistant = 1
        )
}

group EyeCalibrator {
    var cal_fixation_duration = 800ms
    var cal_fix_pos_x = 0 (scope = local)
    var cal_fix_pos_y = 0 (scope = local)
    var num_stims_shown = 0
    var miss_count = 0
    var success = 0
    var failure = 0
    var ignore = 0

    var fixation_width = 10                      //Y: was 1
    var fixation_point_size = 0.65               //Y: was 0.4
    var fixation_pos_x = 0
    var fixation_pos_y = 0

    var fixation_point_r = 0                 //Y: was var
    var fixation_point_g = 0                 //Y: was var
    var fixation_point_b = 0                 //Y: was var
    var eye_on_fixation_point = false
}

group labjack{
    var labjack_target_on = 0
    var labjack_cue_on = 0
    var t_labjack_cue_on=0
}

///////////
// Sounds
///////////


////////////
// Stimuli
////////////

group 'Global' {
    white_noise_background 'White Noise Background' ()
    blank_screen 'New Blank Screen' (color = 0,0,0)
}
group 'Fixation+Pursuit 2' {
    frame_list dynamicFix (
        stimulus_group = dynamicFixFrames
        loop = YES
        autoplay = YES
        )
    stimulus_group dynamicFixFrames {
        circular_fixation_point fixCircleDyn (
            color = fix_red,fix_green,fix_blue
            trigger_width = fix_win
            trigger_watch_x = eye_x
            trigger_watch_y = eye_y
            trigger_flag = on_fix_dyn
            x_size = fix_sz
            y_size = fix_sz
            x_position = fixX+cos(pursuitTheta*pi()/180)*fixDynMag*sin(2*pi()*fixHz*(nextFrameTime() - tStart)/1e6)
            y_position = fixY+sin(pursuitTheta*pi()/180)*fixDynMag*sin(2*pi()*fixHz*(nextFrameTime() - tStart)/1e6)
            rotation = 0
            alpha_multiplier = 1
            )
    }
}

circular_fixation_point fixation_point (
    trigger_width = fixation_width
    trigger_watch_x = eye_x
    trigger_watch_y = eye_y
    trigger_flag = eye_on_fixation_point
    //color = 0,0,0                                               //Y: was 1,0,0
    color = fixation_point_r, fixation_point_g, fixation_point_b  //Y: added this so we can send to blackrock
    x_size =1// fixation_point_size
    x_position = fixation_pos_x
    y_position = fixation_pos_y
    )


///////////////
// Protocols
///////////////


protocol 'Manual+Pursuit' {
    start_device_io (eye_tracker)
    queue_stimulus ('New Blank Screen')
    update_stimulus_display ()
    task Trials {
        state 'Initial' {
            localTrials = 0
            CorrectTrials = 0
            // start_io_device (labjack)
            start_io_device (firmata)
            goto ('Fix On')
        }
        state 'Fix On' {
            fix_red = 1
            fix_blue = 1
            fix_green = 1
            tStart = nextFrameTime()
            live_queue_stimulus (dynamicFix)
            update_stimulus_display ()
            start_timer (
                timer = fixWait
                duration = fixWaitDur
                duration_units = ms
                )
            goto (
                target = 'Trial Start'
                when = on_fix_dyn
                )
            timer_expired (
                target = 'Failure to fixate'
                timer = fixWait
                )
        }

        state 'Trial Start' {
            report ('Fixation acquired.')
            startTrial = 1
            start_timer (
                timer = EarlyHold
                duration = early_HoldDur
                duration_units = ms
                )
            goto (
                target = Bad
                when = !on_fix_dyn
                )
            timer_expired (
                target = 'Early Reward'
                timer = EarlyHold
                )
        }

        state 'Early Reward' {
            reward_line = true
            start_timer (
                timer = EarlyRew
                duration = early_rewardDur
                duration_units = ms
                )
            timer_expired (
                target = 'Late Hold'
                timer = EarlyRew
                )
        }

        state 'Late Hold' {
            reward_line = false
            start_timer (
                timer = LateHold
                duration = fix_pur_HoldDur
                duration_units = ms
                )
            goto (
                target = 'Late Bad'
                when = !on_fix_dyn
                )
            timer_expired (
                target = 'Late Reward'
                timer = LateHold
                )
        }

        state 'Late Reward' {
            report ('Late hold SUCCESS. HoldDur = $fix_pur_HoldDur')
            fix_red = 0
            fix_green = 1
            fix_blue = 0
            update_stimulus_display ()

            fix_pur_HoldDur = fix_pur_HoldDur + holdDur_step
            if (fix_pur_HoldDur > holdDur_max) {
                fix_pur_HoldDur = holdDur_max
            }

            CorrectTrials = CorrectTrials + 1
            action/play_sound(success_sound)
            reward_line = true

            start_timer (
                timer = LateRew
                duration = early_rewardDur * reward_multiplier
                duration_units = ms
                )
            timer_expired (
                target = 'End Trial'
                timer = LateRew
                )
        }

        state 'Late Bad' {
            report ('Late hold FAILED. HoldDur = $fix_pur_HoldDur')
            fix_red = 1
            fix_green = 0
            fix_blue = 0
            update_stimulus_display ()

            fix_pur_HoldDur = fix_pur_HoldDur - holdDur_step
            if (fix_pur_HoldDur < holdDur_min) {
                fix_pur_HoldDur = holdDur_min
            }

            start_timer (
                timer = LateBadTimer
                duration = fix_pur_timeoutDur
                duration_units = ms
                )
            timer_expired (
                target = 'End Trial'
                timer = LateBadTimer
                )
        }

        state 'End Trial' {
            report ('Ending Trial.')
            reward_line = false
            dequeue_stimulus (dynamicFix)
            update_stimulus_display ()

            if (fixDynMag == 0) {
                if (CorrectTrials % 9 == 0) { 
                    fixX = -8    
                    fixY =  8 
                    }
                if (CorrectTrials % 9 == 1) { 
                    fixX =  0    
                    fixY =  8 
                    }
                if (CorrectTrials % 9 == 2) { 
                    fixX =  8    
                    fixY =  8 
                    }
                if (CorrectTrials % 9 == 3) { 
                    fixX = -8    
                    fixY =  0 
                    }
                if (CorrectTrials % 9 == 4) { 
                    fixX =  0    
                    fixY =  0 
                    }
                if (CorrectTrials % 9 == 5) { 
                    fixX =  8    
                    fixY =  0 
                    }
                if (CorrectTrials % 9 == 6) { 
                    fixX = -8    
                    fixY = -8 
                    }
                if (CorrectTrials % 9 == 7) { 
                    fixX =  0    
                    fixY = -8 
                    }
                if (CorrectTrials % 9 == 8) { 
                    fixX =  8    
                    fixY = -8 
                    }
            }

            if (fixDynMag != 0) {
                if (CorrectTrials%(2*nRep)==0){
                    pursuitTheta = 90 - pursuitTheta
                    fixX=0
                    fixY=0
                }
                if (CorrectTrials%(2*nRep)!=0){
                    if (CorrectTrials%nRep==0){
                        if (pursuitTheta==0){
                            fixY = 0
                            fixX = -8
                        }
                        if (pursuitTheta==90){
                            fixX = 8
                            fixY = 0
                        }
                    }
                }
            }

            localTrials = localTrials+1
            endTrial = 1
            goto (
                target = 'Exit Fixation Pursuit System'
                when = CorrectTrials >= trialNum
                )
            goto (
                target = 'Exit Fixation Pursuit System'
                when = pstop
                )
            goto (ITI)
        }
        state ITI {
            report ('ITI.')
            start_timer (
                timer = fix_pur_ITI
                duration = fix_pur_ITI_Dur // 250
                duration_units = ms
                )
            timer_expired (
                target = 'Fix On'
                timer = fix_pur_ITI
                )
        }
        state Bad {
            report ('Trial Failed.')
            dequeue_stimulus (dynamicFix)
            update_stimulus_display ()
            start_timer (
                timer = fix_pur_timeout
                duration = fix_pur_timeoutDur // 500
                duration_units = ms
                )
            timer_expired (
                target = 'End Trial'
                timer = fix_pur_timeout
                )
        }
        state 'Failure to fixate' {
            report ('Failure to fixate.')
            dequeue_stimulus (dynamicFix)
            start_timer (
                timer = NoFixWait
                duration = NoFixWaitDur  // 500
                duration_units = ms
                )
            timer_expired (
                target = 'Fix On'
                timer = NoFixWait
                )
        }
        state 'Exit Fixation Pursuit System' {
            report ('Leaving state system')
            yield ()
        }
    }
}

protocol 'eyelink' {
    eyelink_tracker_setup (
        device = eye_tracker
        calibration_type = HV13
        )

    start_io_device (eye_tracker)

    wait (600s)
}